PsychoPy2experiment version="2023.1.1"
Settings
  Audio lib = ptb
  End Message = 超商電子禮券預計在一至兩週後寄出，屆時煩請撥冗收取簡訊。感謝您的參與及協助，謝謝!
  Experiment info = {'participant': 'f"{randint(1, 180):03.0f}"', 'session': '001', 'groupE': '', 'groupM': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['resources/loop/repeat_check.xlsx', 'resources/images/end_message.png', 'resources/images/AffectGrid_instruction.png', 'resources/images/nextpage_button.png', 'resources/images/valence.png', 'resources/images/arousal.png', 'resources/videos/neutral.mp4', 'resources/videos/positive.mp4', 'resources/videos/sadness.mp4', 'resources/loop/MLQP_loop.xlsx', 'resources/loop/pictureloop.xlsx', 'resources/images/GobalLocal_instruction.png', 'resources/images/p1_FgJl.png', 'resources/images/p2_FlJg.png', 'resources/images/p3_FlJg.png', 'resources/images/p4_FgJl.png', 'resources/images/p5_FgJl.png', 'resources/images/p6_FlJg.png', 'resources/images/p7_FlJg.png', 'resources/images/p8_FgJl.png']
  Screen = 1
  Units = height
  Use version = 2023.1.1
  Window size (pixels) = [1366, 768]
  color = 1.0000, 1.0000, 1.0000
  expName = 正向情緒與意義感研究三
  keyboardBackend = ioHub
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Routines
  Routine WelcomeScreen
    TextComponent Welcometext
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        歡迎進入實驗階段!

        建議您在安靜無干擾的環境進行本實驗

        請確認是否已開啟電腦的音量
        (可透過鍵盤的音量鍵來調整音量大小)

        若您準備好開始實驗，請按「空白鍵」開始
    KeyboardComponent key_WelcomePrepare
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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  Routine EmotionVideo
    CodeComponent code_moviegroup
      Code Type = Auto->JS
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      Begin Experiment:
        # Makes a list of 3 emotion movie
        movie_groups = ["resources/videos/neutral.mp4", "resources/videos/positive.mp4", "resources/videos/sadness.mp4"]

        #condition group based on participant ID
        #ID%3=0->neu; ID%3=1->pos; ID%3=2->sad
        if int(expInfo['participant'])%3 == 0:
             expInfo['groupE'] = movie_groups[0]
        elif int(expInfo['participant'])%3 == 1:
             expInfo['groupE'] = movie_groups[1]
        elif int(expInfo['participant'])%3 == 2:
             expInfo['groupE'] = movie_groups[2]
    CodeComponent codeMovie
      Code Type = Both
      disabled = True
      Begin Experiment:
        # Makes a long list of length 3 * 30
        movie_groups = ["resources/videos/neutral.mp4", "resources/videos/positive.mp4", "resources/videos/sadness.mp4"] * 30

        # if python index starts at 0 but participant ID starts at 1 the first element
        # will be skipped, so add a value to compensate
        movie_groups.append("resources/videos/neutral.mp4")

        # use the participant ID to index from this list
        expInfo['group'] = movie_groups[int(expInfo['participant'])]
      Begin JS Experiment:
        /*Makes a long list of length 3 * 30*/
        movie_groups = Array(30).fill(["resources/videos/neutral.mp4", "resources/videos/positive.mp4", "resources/videos/sadness.mp4"]).flat();

        /*if  index starts at 0 but participant ID starts at 1 the first element
        /*will be skipped, so add a value to compensate*/
        movie_groups.push("resources/videos/neutral.mp4");

        /*use the participant ID to index from this list*/
        thisGroup = movie_groups[Number.parseInt(expInfo["participant"])];
        expInfo["group"] = thisGroup;
    TextComponent text_MovieInstruction
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        接下來會自動播放一部時間在兩分鐘內的短片

        請您注意觀看

        (可透過鍵盤的音量鍵來調整短片的音量)
    TextComponent movie_fixation
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 5
      stopVal [duration (s)] = 0.5
      text = +
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    MovieComponent Emotion_Movie
      backend = ffpyplayer
      forceEndRoutine = True
      movie = $expInfo['groupE']
      size = (1,0.7)
      startVal [time (s)] = 5.5
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  Routine GolbalLocal_instruction
    ImageComponent image_GobalLocalInstruction
      image = resources/images/GobalLocal_instruction.png
      startVal [time (s)] = 0.5
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    KeyboardComponent key_GobalLocalInstruction
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 5
      store = nothing
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  Routine GobalLocal_example
    ImageComponent image_GobalLocalExample
      image = resources/images/p1_FgJl.png
      startVal [time (s)] = 0.0
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    KeyboardComponent key_GobalLocalExample
      allowedKeys = 'f','j'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine example_feedback
    TextComponent feedback_to_formal_GobalLocal
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0
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      text:
        很好，您現在知道該怎麼做了!

        若您準備好開始進入正式題

        請按「空白鍵」開始
    KeyboardComponent key_GolbalLocal_formalsession
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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  Routine fixpoint
    TextComponent fixation
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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  Routine GobalLocal_FormalSession
    CodeComponent code_caculateGobalChoiceRate
      Code Type = Both
      Begin Experiment:
        global_choice = []
        gobal_rt = []
        local_rt = []
      Begin JS Experiment:
        global_choice = [];
        gobal_rt = [];
        local_rt = [];
      End Experiment:
        #Gobal Choice percentage(100%)
        thisExp.addData('GobalChoice_percentage', sum(global_choice)/len(global_choice)*100)
        #gobal rt mean and standard deviation
        thisExp.addData('Gobal_rt_mean', average(gobal_rt))
        #local rt mean
        thisExp.addData('local_rt_mean', average(local_rt))
      End JS Experiment:
        psychoJS.experiment.addData("GobalChoice_percentage", ((util.sum(global_choice) / global_choice.length) * 100));
        psychoJS.experiment.addData("Gobal_rt_mean", util.average(gobal_rt));
        psychoJS.experiment.addData("local_rt_mean", util.average(local_rt));
        psychoJS.experiment.nextEntry();
      End JS Routine:
        global_choice.push(key_GobalLocal_ans.corr);
        if ((key_GobalLocal_ans.corr === 1)) {
            gobal_rt.push(key_GobalLocal_ans.rt);
        } else {
            if ((key_GobalLocal_ans.corr === 0)) {
                local_rt.push(key_GobalLocal_ans.rt);
            }
        }
      End Routine:
        #choice list
        global_choice.append(key_GobalLocal_ans.corr)

        #glocal reaction time list
        if key_GobalLocal_ans.corr == 1:
            gobal_rt.append(key_GobalLocal_ans.rt)
        elif key_GobalLocal_ans.corr == 0:
            local_rt.append(key_GobalLocal_ans.rt)
    CodeComponent codeGobalLocal
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        #load picture as object
        pic1 = 'images/p1_FgJl.png'
        pic2 = 'images/p2_FlJg.png'
        pic3 = 'images/p3_FlJg.png'
        pic4 = 'images/p4_FgJl.png'
        pic5 = 'images/p5_FgJl.png'
        pic6 = 'images/p6_FlJg.png'
        pic7 = 'images/p7_FlJg.png'
        pic8 = 'images/p8_FgJl.png'

        #creat picture stimulus list
        picture_list = [pic1, pic2, pic3, pic4, pic5, pic6, pic7, pic8]

        #randomized picture stimulus
        random_picturelist = shuffle(picture_list)
      Begin Routine:
        stimulus_picture = random_picturelist.pop()
      End Routine:
        thisExp.addData('selected_picture',stimulus_picture)
    ImageComponent image_GobalLocal_Formal
      image [set every repeat] = $picture_list
      startVal [time (s)] = 0.0
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    KeyboardComponent key_GobalLocal_ans
      allowedKeys = 'f','j'
      correctAns = $Gobal_corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine EndScreen
    TextComponent text_goodbye
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        本次實驗已完成，稍後請稍等實驗數據儲存

        數據儲存完畢後，會出現下圖畫面

        屆時請「點選OK」，接著再關閉實驗網頁

        閱讀完此頁說明，請用滑鼠點擊下圖來結束實驗

        感謝您的參與及協助!
    ImageComponent image_endmsg
      image = resources/images/end_message.png
      pos = (0, -0.2)
      size = (0.5, 0.25)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_goodbye
      clickable = image_endmsg
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 1
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  Routine MIL_form
    FormComponent form_MLQP
      Data Format = rows
      Font = Noto Sans TC
      Item Padding = 0.01
      Items = form_MLQPitems.xlsx
      Randomize = False
      Style = light
      Text Height = 0.03
      itemColor = white
      markerColor = red
      pos = (0, 0.05)
      responseColor = white
      saveStartStop = False
      size = (1.7, 0.8)
      startVal [time (s)] = 0.0
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    ButtonComponent buttom_MLQP
      bold = False
      font = Noto Sans TC
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.75, -0.45)
      save = none
      saveStartStop = False
      size = (0.18, 0.07)
      startVal [condition] = form_MLQP.complete
      text = 下一頁>
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  Routine MLQP
    CodeComponent code_MLQmean
      Code Type = Both
      Begin Experiment:
        MLQP_ans = []
      Begin JS Experiment:
        MLQP_ans = [];
      End Experiment:
        #MLQ_item 5 reverse score
        MLQP_ans[4] = 8-MLQP_ans[4]
        #add data
        thisExp.addData('MLQ_1', MLQP_ans[0])
        thisExp.addData('MLQ_2', MLQP_ans[1])
        thisExp.addData('MLQ_3', MLQP_ans[2])
        thisExp.addData('MLQ_4', MLQP_ans[3])
        thisExp.addData('MLQ_5r', MLQP_ans[4])
        thisExp.addData('MLQans_mean', average(MLQP_ans))
      End JS Experiment:
        MLQP_ans[4] = (8 - MLQP_ans[4]);
        psychoJS.experiment.addData("MLQ_1", MLQP_ans[0]);
        psychoJS.experiment.addData("MLQ_2", MLQP_ans[1]);
        psychoJS.experiment.addData("MLQ_3", MLQP_ans[2]);
        psychoJS.experiment.addData("MLQ_4", MLQP_ans[3]);
        psychoJS.experiment.addData("MLQ_5r", MLQP_ans[4]);
        psychoJS.experiment.addData("MLQans_mean", util.average(MLQP_ans));
        psychoJS.experiment.nextEntry();
      End JS Routine:
        MLQP_ans.push(slider_MLQ.rating);
      End Routine:
        MLQP_ans.append(slider_MLQ.rating)
    TextComponent text_MLQinstruction
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        以下句子是想了解您「現在」可能有的想法或感受。
        請您依據您「現在的感受」，用滑鼠在下面的橫桿中，點選最適合描述您現在的感受的正確程度。
    TextComponent MLQP_item
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $MLQP_items
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    SliderComponent slider_MLQ
      borderColor = 0.0039, 0.0039, 0.0039
      color = 0.0039, 0.0039, 0.0039
      forceEndRoutine = False
      granularity = 1
      labels = "1\n完全不正確", "2", "3", "4", "5", "6", "7\n完全正確"
      letterHeight = 0.03
      pos = (0, -0.2)
      saveStartStop = False
      size = (1, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    ImageComponent button_MLQ
      image [set every repeat] = resources/images/nextpage_button.png
      pos = (0.75, -0.4)
      size = (0.17, 0.08)
      startVal [condition] = slider_MLQ.rating
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    MouseComponent mouse_MLQ
      clickable = button_MLQ
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [condition] = slider_MLQ.rating
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  Routine AffectGrid_instruction
    ImageComponent image_AffectGrid_instruction
      image = resources/images/AffectGrid_instruction.png
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent key_AffectGridInstruction
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 3
      store = nothing
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  Routine PretestEmotion_valence
    TextComponent text_pretest_valenceInstruction
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.025
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 請依下方情感方格中「橫軸」所標示的數字，在最下方相應的量尺橫桿上，用滑鼠點選最適合描述您「目前」的「情緒正負向程度」。
      wrapWidth = 20
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    TextComponent text_pre0valence
      color = -0.6314, -0.3804, -0.3804
      letterHeight = 0.02
      pos = (-0.6, -0.4)
      saveStartStop = False
      startVal [condition] = slider_pretestvalence.getRating() == 0
      wrapWidth = 11
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      text:
        若您一開始即點選0
        請先嘗試點選其他數字
        會於右下角出現下一頁按鈕
        接著再次點選0
        即可按下一頁
    ImageComponent image_pretest_valence
      image = resources/images/valence.png
      saveStartStop = False
      size = (1,0.6)
      startVal [time (s)] = 0.0
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    SliderComponent slider_pretestvalence
      borderColor = 0.0039, 0.0039, 0.0039
      color = 0.0039, 0.0039, 0.0039
      forceEndRoutine = False
      granularity = 1
      labels = "-4", "-3", "-2", "-1", "0", "1", "2", "3", "4"
      letterHeight = 0.03
      pos = (0, -0.38)
      saveStartStop = False
      size = (0.7, 0.06)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (-4, -3, -2, -1, 0, 1, 2, 3, 4)
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    ImageComponent button_pretestvalence
      image = resources/images/nextpage_button.png
      pos = (0.75, -0.4)
      size = (0.17, 0.08)
      startVal [condition] = slider_pretestvalence.rating
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    MouseComponent mouse_pretestvalence
      clickable = button_pretestvalence
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [condition] = slider_pretestvalence.rating
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  Routine PretestEmotion_arousal
    TextComponent text_pretest_arousalnstruction
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.025
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 請依下方情感方格中「縱軸」所標示的數字，在左方相應的量尺橫桿上，用滑鼠點選最適合描述您「目前」的「情緒激動程度」。
      wrapWidth = 20
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    ImageComponent image_pretest_arousal
      image = resources/images/arousal.png
      saveStartStop = False
      size = (1,0.6)
      startVal [time (s)] = 0.0
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    SliderComponent slider_pretestarousal
      borderColor = 0.0039, 0.0039, 0.0039
      color = 0.0039, 0.0039, 0.0039
      forceEndRoutine = False
      granularity = 1
      labels = "1", "2", "3", "4", "5", "6", "7", "8", "9"
      letterHeight = 0.03
      pos = (-0.43, -0.05)
      saveStartStop = False
      size = (0.06, 0.7)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
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    ImageComponent button_pretestarousal
      image = resources/images/nextpage_button.png
      pos = (0.75, -0.4)
      size = (0.17, 0.08)
      startVal [condition] = slider_pretestarousal.rating
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    MouseComponent mouse_pretestarousal
      clickable = button_pretestarousal
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [condition] = slider_pretestarousal.rating
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  Routine PostestEmotion_valence
    TextComponent text_postest_valenceInstruction
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.025
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 請依下方情感方格中「橫軸」所標示的數字，在最下方相應的量尺橫桿上，用滑鼠點選最適合描述您剛才在「觀看短片時」的「情緒正負向程度」。
      wrapWidth = 20
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    TextComponent text_post0valence
      color = -0.6314, -0.3804, -0.3804
      letterHeight = 0.02
      pos = (-0.6, -0.4)
      saveStartStop = False
      startVal [condition] = slider_postestvalence.getRating() == 0
      wrapWidth = 11
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      text:
        若您一開始即點選0
        請先嘗試點選其他數字
        會於右下角出現下一頁按鈕
        接著再次點選0
        即可按下一頁
    ImageComponent image_postest_valence
      image = resources/images/valence.png
      saveStartStop = False
      size = (1,0.6)
      startVal [time (s)] = 0.0
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    SliderComponent slider_postestvalence
      borderColor = 0.0039, 0.0039, 0.0039
      color = 0.0039, 0.0039, 0.0039
      forceEndRoutine = False
      granularity = 1
      labels = "-4", "-3", "-2", "-1", "0", "1", "2", "3", "4"
      letterHeight = 0.03
      pos = (0, -0.38)
      saveStartStop = False
      size = (0.7, 0.06)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (-4, -3, -2, -1, 0, 1, 2, 3, 4)
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    ImageComponent button_postestvalence
      image = resources/images/nextpage_button.png
      pos = (0.75, -0.4)
      size = (0.17, 0.08)
      startVal [condition] = slider_postestvalence.rating
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    MouseComponent mouse_postestvalence
      clickable = button_postestvalence
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [condition] = slider_postestvalence.rating
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  Routine PostestEmotion_arousal
    TextComponent text_postest_arousalInstruction
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.025
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 請依下方情感方格中「縱軸」所標示的數字，在左方相應的量尺橫桿上，用滑鼠點選最適合描述您剛才在「觀看短片時」的「情緒激動程度」。
      wrapWidth = 20
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    ImageComponent image_postest_arousal
      image = resources/images/arousal.png
      saveStartStop = False
      size = (1,0.6)
      startVal [time (s)] = 0.0
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    SliderComponent slider_postestarousal
      borderColor = 0.0039, 0.0039, 0.0039
      color = 0.0039, 0.0039, 0.0039
      forceEndRoutine = False
      granularity = 1
      labels = "1", "2", "3", "4", "5", "6", "7", "8", "9"
      letterHeight = 0.03
      pos = (-0.43, -0.05)
      saveStartStop = False
      size = (0.06, 0.7)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
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    ImageComponent button_postestarousal
      image = resources/images/nextpage_button.png
      pos = (0.75, -0.4)
      size = (0.17, 0.08)
      startVal [condition] = slider_postestarousal.rating
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    MouseComponent mouse_postestarousal
      clickable = button_postestarousal
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [condition] = slider_postestarousal.rating
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  Routine assignMILgroup
    CodeComponent code_MILgroup
      Code Type = Auto->JS
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      Begin Experiment:
        #assign MIL group, set 0 at the beginning
        highMIL_rep = 0
        lowMIL_rep = 0

        #if id%2 = 0 will show highMIL survey, if id%2 != 0 will show lowMIL survey
        if int(expInfo['participant']) % 2 == 0:
            highMIL_rep = 1
            expInfo['groupM'] = 'high'
        else:
            lowMIL_rep = 1
            expInfo['groupM'] = 'low'
  Routine movie_check
    CodeComponent repeat_check
      Code Type = Both
      Begin Experiment:
        check_repeat = []
      Begin JS Experiment:
        check_repeat = [];
      End Experiment:
        thisExp.addData('DoExp2', check_repeat[0])
        thisExp.addData('SeeSameVideo', check_repeat[1])
      End JS Experiment:
        psychoJS.experiment.addData("DoExp2", check_repeat[0]);
        psychoJS.experiment.addData("SeeSameVideo", check_repeat[1]);
        psychoJS.experiment.nextEntry();
      End JS Routine:
        check_repeat.push(slider_check.rating);
      End Routine:
        check_repeat.append(slider_check.rating)
    TextComponent MovieRepeatCheck
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $check_items
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    SliderComponent slider_check
      borderColor = 0.0039, 0.0039, 0.0039
      color = 0.0039, 0.0039, 0.0039
      forceEndRoutine = False
      granularity = 1
      labels = "是", "否"
      letterHeight = 0.03
      pos = (0, -0.2)
      saveStartStop = False
      size = (0.7, 0.05)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2)
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    ImageComponent button_check
      image [set every repeat] = resources/images/nextpage_button.png
      pos = (0.75, -0.4)
      size = (0.17, 0.08)
      startVal [condition] = slider_check.rating
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    MouseComponent mouse_check
      clickable = button_check
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [condition] = slider_check.rating
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  PavloviaSurveyRoutine survey_InformDem
    surveyId = a29d9256-f5c3-48ca-bec4-3f2b45837c27
    surveyJson = survey_a29d9256-f5c3-48ca-bec4-3f2b45837c27.json
    surveyType = id
  PavloviaSurveyRoutine survey_highMIL
    surveyId = 2a7cc41e-20de-4421-8b93-eb07974dbd2e
    surveyType = id
  PavloviaSurveyRoutine survey_lowMIL
    surveyId = 2e7a6b4d-ecef-472a-a708-6de3bec87327
    surveyType = id
Flow
  Routine assignMILgroup
  LoopInitiator showhighMIL loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = highMIL_rep
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    PavloviaSurveyRoutine survey_highMIL
  LoopTerminator showhighMIL
  LoopInitiator showlowMIL loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = lowMIL_rep
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    PavloviaSurveyRoutine survey_lowMIL
  LoopTerminator showlowMIL
  Routine AffectGrid_instruction
  Routine PretestEmotion_valence
  Routine PretestEmotion_arousal
  Routine EmotionVideo
  Routine GolbalLocal_instruction
  Routine GobalLocal_example
  Routine example_feedback
  LoopInitiator trialsGobalLocal loopType="TrialHandler"
    conditionsFile = resources/loop/pictureloop.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'picture_list': 'resources/images/p1_FgJl.png', 'Gobal_corrAns': 'f'},
      {'picture_list': 'resources/images/p2_FlJg.png', 'Gobal_corrAns': 'j'},
      {'picture_list': 'resources/images/p3_FlJg.png', 'Gobal_corrAns': 'j'},
      {'picture_list': 'resources/images/p4_FgJl.png', 'Gobal_corrAns': 'f'},
      {'picture_list': 'resources/images/p5_FgJl.png', 'Gobal_corrAns': 'f'},
      {'picture_list': 'resources/images/p6_FlJg.png', 'Gobal_corrAns': 'j'},
      {'picture_list': 'resources/images/p7_FlJg.png', 'Gobal_corrAns': 'j'},
      {'picture_list': 'resources/images/p8_FgJl.png', 'Gobal_corrAns': 'f'}]
    Routine fixpoint
    Routine GobalLocal_FormalSession
  LoopTerminator trialsGobalLocal
  LoopInitiator trialsMIL loopType="TrialHandler"
    conditionsFile = resources/loop/MLQP_loop.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'MLQP_index': 'MLQP_1', 'MLQP_items': '1.我了解我的生活意義。'},
      {'MLQP_index': 'MLQP_2', 'MLQP_items': '2.我的生活有一個明確的目的。'},
      {'MLQP_index': 'MLQP_3', 'MLQP_items': '3.我理解是什麼讓我的生活有意義。'},
      {'MLQP_index': 'MLQP_4', 'MLQP_items': '4.我已經找到一個令人滿意的生活目的。'},
      {'MLQP_index': 'MLQP_5r', 'MLQP_items': '5.我的生活沒有明確的目的。'}]
    Routine MLQP
  LoopTerminator trialsMIL
  Routine PostestEmotion_valence
  Routine PostestEmotion_arousal
  LoopInitiator repeatCheck loopType="TrialHandler"
    conditionsFile = resources/loop/repeat_check.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'check_index': 'DoExp2', 'check_items': '1.您先前是否參加過本計畫的實驗二?'},
      {'check_index': 'SeeSameVideo', 'check_items': '2.您是否已經看過剛才所觀看的影片?'}]
    Routine movie_check
  LoopTerminator repeatCheck
  Routine EndScreen
